//----------------------------------------------------------------------------
// Initialize global variables
//----------------------------------------------------------------------------

objref biasSTN[numSTN], biasGPe[numGPe], biasGPi[numGPi]

//----------------------------------------------------------------------------
// Functions to set up network from current value of global variables
//----------------------------------------------------------------------------

proc BIAconnectNet() { local i, j, k

for (i=pnm.pc.id; i < ncell; i += pnm.pc.nhost) {
	if (i >= 0 && i < 10 && pnm.pc.gid_exists(i)) {
		biasSTN[i] = new IClamp()
		pnm.pc.gid2obj(i).soma biasSTN[i].loc(.5)
	}
	if (i >= 10 && i < 40 && pnm.pc.gid_exists(i)) {
		j = i-10
		biasGPe[j] = new IClamp()
		pnm.pc.gid2obj(i).soma biasGPe[j].loc(.5)
	}
	if (i >= 40 && i < 50 && pnm.pc.gid_exists(i)) {
		k = i-40
		biasGPi[k] = new IClamp()
		pnm.pc.gid2obj(i).soma biasGPi[k].loc(.5)
	}
}
}


//----------------------------------------------------------------------------
proc BIAupdateWeights() { local i, j, k

for (i=pnm.pc.id; i < ncell; i += pnm.pc.nhost) {
	if (i >= 0 && i < 10 && pnm.pc.gid_exists(i)) {
		biasSTN[i].del = 0
		biasSTN[i].dur = 1e9
		biasSTN[i].amp = iBiasSTN
	}
	if (i >= 10 && i < 40 && pnm.pc.gid_exists(i)) {
		j = i-10
		biasGPe[j].del = 0
		biasGPe[j].dur = 1e9
		biasGPe[j].amp = iBiasGPe
	}
	if (i >= 40 && i < 50 && pnm.pc.gid_exists(i)) {
		k = i-40
		biasGPi[k].del = 0
		biasGPi[k].dur = 1e9
		biasGPi[k].amp = iBiasGPi
	}
}
}


//----------------------------------------------------------------------------
// Call setup functions when .hoc file is loaded
//----------------------------------------------------------------------------

BIAconnectNet()
BIAupdateWeights()
